begin model

begin parameters
Ve 0.05
Vc 25.0
A 25.0
f 602.3
kon 1.7E-5 / Ve
koff 0.01
kp 0.015 / A
kd 0.001
KZB 0.0083
Kab 0.0083
KU 0.125
kzb KZB / Vc
kzu 0.125
kzp 4.98E-5 / Vc
kzd 5.64E-5 / Vc
ksbPP 4.15E-4 / Vc
ksuPP 1.7
ksbU 4.15E-4 / Vc
ksuU 1.7
kdl 0.001/5.0
KPR 0.01
kh 10000.0
KSB 0.0083
ksb KSB / Vc
ksu 0.125
ksbss ksb * 0.1
KSA0 0.0026
KST0 0.0022 
ksa KSA0
kst KST0 / Vc
ksi 1.21 
ksil (0.014 / Vc) 
ksih (0.025 / Vc) 
ksd 5.64E-5 / Vc
kfd 0.01
Lig0 60.0
L0 Lig0 * A
adaptor0 80.0
A0 adaptor0 * A
LCK0 390.0 * A
Z0 1131.0
ZAP0 Z0 * Vc
SS0 754.0
SYK0 SS0 * Vc
S0 180.0 * Vc
end parameters

begin molecule types
LCK()
Zeta(receptor,ITAM1~U~PP,ITAM2~U~PP,ITAM3~U~PP,ITAM4~U~PP,ITAM5~U~PP,ITAM6~U~PP)
A(State~UZAP~PZAP~SHP~uSYK~pSYK)
ligand(receptor)
end molecule types

begin seed species
1  A(State~UZAP) ZAP0
2  Zeta(receptor,ITAM1~U,ITAM2~U,ITAM3~U,ITAM4~U,ITAM5~U,ITAM6~U) A0
3  LCK() LCK0
4  ligand(receptor) L0
5  A(State~SHP) S0
6  A(State~uSYK) SYK0
end seed species

begin observables
Molecules Adaptor_bound  ligand(receptor!+)
Molecules Adaptor_free  Zeta(receptor)
Molecules bound_SHP1  A(State~SHP!+)
Molecules bound_ZAP_SYK A(State~PZAP!+) A(State~UZAP!+) A(State~uSYK!+)  A(State~pSYK!+)
Molecules bound_pSYK_uSYK  Zeta(receptor!+,ITAM1!1,ITAM2!2,ITAM3!3,ITAM4!4,ITAM5!5,ITAM6!6).A(State~uSYK!1).A(State~uSYK!2).A(State~uSYK!3).A(State~uSYK!4).A(State~uSYK!5).A(State~uSYK!6)  Zeta(receptor!+,ITAM1!1,ITAM2!2,ITAM3!3,ITAM4!4,ITAM5!5,ITAM6!6).A(State~pSYK!1).A(State~pSYK!2).A(State~pSYK!3).A(State~pSYK!4).A(State~pSYK!5).A(State~pSYK!6)
Molecules PZAP_bound  A(State~PZAP!+)
Molecules PZAP_free  A(State~PZAP)
Molecules PZAP_total  A(State~PZAP!?)
Molecules ZAP_bound  A(State~PZAP!+)  A(State~UZAP!+)
Molecules ZAP_free  A(State~PZAP) A(State~UZAP)
Molecules pSYK_bound  A(State~pSYK!+)
Molecules pSYK_free  A(State~pSYK)
Molecules pSYK_total  A(State~pSYK!?)
Molecules SYK_bound  A(State~uSYK!+)  A(State~pSYK!+)
Molecules SYK_free  A(State~pSYK) A(State~uSYK)
#Molecules zeta_bound  Zeta(receptor!+)
end observables

begin functions
end functions

begin reaction rules
r2_ligand_binding:	 ligand(receptor) +  Zeta(receptor,ITAM1~U,ITAM2~U,ITAM3~U,ITAM4~U,ITAM5~U,ITAM6~U) <->  Zeta(receptor!1,ITAM1~U,ITAM2~U,ITAM3~U,ITAM4~U,ITAM5~U,ITAM6~U).ligand(receptor!1)		kon, koff
r3_ITAM1_phosphorylation:	 LCK() +  Zeta(receptor!+,ITAM1~U) ->  LCK() +  Zeta(receptor!+,ITAM1~PP)		kp
r4_ITAM2_phosphorylation:	 LCK() +  Zeta(receptor!+,ITAM2~U) ->  LCK() +  Zeta(receptor!+,ITAM2~PP)		kp
r9_ITAM1_dephosphorylation:	 Zeta(receptor!+,ITAM1~PP) ->  Zeta(receptor!+,ITAM1~U)		kd
r10_ITAM2_dephosphorylation:	 Zeta(receptor!+,ITAM2~PP) ->  Zeta(receptor!+,ITAM2~U)		kd
r15_PZAP_binding_ITAM1:	 A(State~PZAP) +  Zeta(receptor!+,ITAM1~PP) <->  Zeta(receptor!+,ITAM1~PP!1).A(State~PZAP!1)		kzb, kzu
r17_PZAP_binding_ITAM3:	 A(State~PZAP) +  Zeta(receptor!+,ITAM3~PP) <->  Zeta(receptor!+,ITAM3~PP!1).A(State~PZAP!1)		kzb, kzu
r21_UZAP_binding_ITAM1:	 A(State~UZAP) +  Zeta(receptor!+,ITAM1~PP) <->  Zeta(receptor!+,ITAM1~PP!1).A(State~UZAP!1)		kzb, kzu
r22_UZAP_binding_ITAM2:	 A(State~UZAP) +  Zeta(receptor!+,ITAM2~PP) <->  Zeta(receptor!+,ITAM2~PP!1).A(State~UZAP!1)		kzb, kzu
r86_uZAP_phosphorylation_by_LCK:	 A(State~UZAP!+) +  LCK() ->  A(State~PZAP!+) +  LCK()		kzp
r84_bound_pZAP_dephosphorylation_by_SHP:	 A(State~SHP!+)%1 +  A(State~PZAP!+)%2 ->  A(State~SHP!+)%1 +  A(State~UZAP!+)%2		kzd
r93_free_ZAP_dephosphorylation_SHP:	 A(State~SHP!+)%1 +  A(State~PZAP)%2 ->  A(State~SHP!+)%1 +  A(State~UZAP)%2		kzd
r57_SHP_binding_ITAM1_PP:	 A(State~SHP) +  Zeta(receptor!+,ITAM1~PP) <->  Zeta(receptor!+,ITAM1~PP!1).A(State~SHP!1)		ksbPP, ksuPP
r58_SHP_binding_ITAM2_PP:	 A(State~SHP) +  Zeta(receptor!+,ITAM2~PP) <->  Zeta(receptor!+,ITAM2~PP!1).A(State~SHP!1)		ksbPP, ksuPP
r51_SHP_binding_ITAM1_U:	 A(State~SHP) +  Zeta(receptor!+,ITAM1~U) <->  Zeta(receptor!+,ITAM1~U!1).A(State~SHP!1)		ksbU, ksuU
r52_SHP_binding_ITAM2_U:	 A(State~SHP) +  Zeta(receptor!+,ITAM2~U) <->  Zeta(receptor!+,ITAM2~U!1).A(State~SHP!1)		ksbU, ksuU
r95_KP:	 Zeta(receptor!3).ligand(receptor!3) ->  ligand(receptor) +  Zeta(receptor)		KPR
r96_KP_adaptor_dephosph_pZAP_ITAM1:	 Zeta(receptor,ITAM1!1).A(State~PZAP!1) ->  Zeta(receptor,ITAM1!1).A(State~UZAP!1)		kh * 10.0
r97_KP_adaptor_dephosph_pZAP_ITAM2:	 Zeta(receptor,ITAM2!1).A(State~PZAP!1) ->  Zeta(receptor,ITAM2!1).A(State~UZAP!1)		kh * 10.0
r108_LRZ1_breaking_ITAM1:	 Zeta(receptor,ITAM1!1).A(State!1) ->  A(State) +  Zeta(receptor,ITAM1)		kh
r109_LRZ1_breaking_ITAM2:	 Zeta(receptor,ITAM2!3).A(State!3) ->  A(State) +  Zeta(receptor,ITAM2)		kh
r114_zeta_convert1:	 Zeta(receptor,ITAM1~PP) ->  Zeta(receptor,ITAM1~U)		kh
r115_zeta_convert2:	 Zeta(receptor,ITAM2~PP) ->  Zeta(receptor,ITAM2~U)		kh
r27_uSYK_binding_ITAM1:	 A(State~uSYK) +  Zeta(receptor!+,ITAM1~U) <->  Zeta(receptor!+,ITAM1~U!1).A(State~uSYK!1)		ksbss, ksu
r28_uSYK_binding_ITAM2:	 A(State~uSYK) +  Zeta(receptor!+,ITAM2~U) <->  Zeta(receptor!+,ITAM2~U!1).A(State~uSYK!1)		ksbss, ksu
r33_uSYK_binding_ITAM1PP:	 A(State~uSYK) +  Zeta(receptor!+,ITAM1~PP) <->  Zeta(receptor!+,ITAM1~PP!1).A(State~uSYK!1)		ksb, ksu
r34_uSYK_binding_ITAM2PP:	 A(State~uSYK) +  Zeta(receptor!+,ITAM2~PP) <->  Zeta(receptor!+,ITAM2~PP!1).A(State~uSYK!1)		ksb, ksu
r39_PSYK_binding_ITAM1:	 A(State~pSYK) +  Zeta(receptor!+,ITAM1~U) <->  Zeta(receptor!+,ITAM1~U!1).A(State~pSYK!1)		ksbss, ksu
r40_PSYK_binding_ITAM2:	 A(State~pSYK) +  Zeta(receptor!+,ITAM2~U) <->  Zeta(receptor!+,ITAM2~U!1).A(State~pSYK!1)		ksbss, ksu
r45_PSYK_binding_ITAM1PP:	 A(State~pSYK) +  Zeta(receptor!+,ITAM1~PP) <->  Zeta(receptor!+,ITAM1~PP!1).A(State~pSYK!1)		ksb, ksu
r46_PSYK_binding_ITAM2PP:	 A(State~pSYK) +  Zeta(receptor!+,ITAM2~PP) <->  Zeta(receptor!+,ITAM2~PP!1).A(State~pSYK!1)		ksb, ksu
r83_ITAM_bound_SYK_phosphorylation_by_LCK:	 A(State~uSYK!+) +  LCK() ->  A(State~pSYK!+) +  LCK()		kzp
r63_uSYK_autophosphorylation:	 A(State~uSYK!+) ->  A(State~pSYK!+)		ksa
r64_pSYK_transphosphorylation_uSYK:	 A(State~uSYK!+)%3 +  A(State~pSYK!+)%4 ->  A(State~pSYK!+)%3 +  A(State~pSYK!+)%4		kst
r65_pSYK_phosphorylating_self_ITAM1:	 Zeta(receptor!+,ITAM1~U!1).A(State~pSYK!1) ->  Zeta(receptor!+,ITAM1~PP!1).A(State~pSYK!1)		ksi
r67_pSYK_phosphorylating_self_ITAM3:	 Zeta(receptor!+,ITAM3~U!1).A(State~pSYK!1) ->  Zeta(receptor!+,ITAM3~PP!1).A(State~pSYK!1)		ksi
r71_pSYK_transphosphorylating_other_ITAM1:	 A(State~pSYK!+) +  Zeta(receptor!+,ITAM1~U!?) ->  A(State~pSYK!+) +  Zeta(receptor!+,ITAM1~PP!?)		ksih
r72_pSYK_transphosphorylating_other_ITAM2:	 A(State~pSYK!+) +  Zeta(receptor!+,ITAM2~U!?) ->  A(State~pSYK!+) +  Zeta(receptor!+,ITAM2~PP!?)		ksih
r94_free_SYK_dephosphorylation_SHP:	 A(State~SHP!+)%1 +  A(State~pSYK)%2 ->  A(State~SHP!+)%1 +  A(State~uSYK)%2		ksd
r85_bound_pSYK_dephosphorylation_by_SHP:	 A(State~SHP!+)%1 +  A(State~pSYK!+)%2 ->  A(State~SHP!+)%1 +  A(State~uSYK!+)%2		ksd
r102_KP_adaptor_dephosph_pSYK_ITAM1:	 Zeta(receptor,ITAM1!1).A(State~pSYK!1) ->  Zeta(receptor,ITAM1!1).A(State~uSYK!1)		kh * 10.0
r103_KP_adaptor_dephosph_pSYK_ITAM2:	 Zeta(receptor,ITAM2!1).A(State~pSYK!1) ->  Zeta(receptor,ITAM2!1).A(State~uSYK!1)		kh * 10.0
r89_bound_CBL_degrade_uZAP:	 A(State~UZAP!+) ->  ligand(receptor)		kdl
r87_Free_pZAP_dephosph:	 A(State~PZAP) ->  A(State~UZAP)		kfd
r88_Free_pSYK_dephosph:	 A(State~pSYK) ->  A(State~uSYK)		kfd
r90_bound_CBL_degrade_pZAP:	 A(State~PZAP!+) ->  ligand(receptor)		kdl
r91_bound_CBL_degrade_uSYK:	 A(State~uSYK!+) ->  ligand(receptor)		kdl
r92_bound_CBL_degrade_pSYK:	 A(State~pSYK!+) ->  ligand(receptor)		kdl
r5_ITAM3_phosphorylation:	 LCK() +  Zeta(receptor!+,ITAM3~U) ->  LCK() +  Zeta(receptor!+,ITAM3~PP)		kp
r7_ITAM5_phosphorylation:	 LCK() +  Zeta(receptor!+,ITAM5~U) ->  LCK() +  Zeta(receptor!+,ITAM5~PP)		kp
r6_ITAM4_phosphorylation:	 LCK() +  Zeta(receptor!+,ITAM4~U) ->  LCK() +  Zeta(receptor!+,ITAM4~PP)		kp
r8_ITAM6_phosphorylation:	 LCK() +  Zeta(receptor!+,ITAM6~U) ->  LCK() +  Zeta(receptor!+,ITAM6~PP)		kp
r11_ITAM3_dephosphorylation:	 Zeta(receptor!+,ITAM3~PP) ->  Zeta(receptor!+,ITAM3~U)		kd
r12_ITAM4_dephosphorylation:	 Zeta(receptor!+,ITAM4~PP) ->  Zeta(receptor!+,ITAM4~U)		kd
r13_ITAM5_dephosphorylation:	 Zeta(receptor!+,ITAM5~PP) ->  Zeta(receptor!+,ITAM5~U)		kd
r14_ITAM6_dephosphorylation:	 Zeta(receptor!+,ITAM6~PP) ->  Zeta(receptor!+,ITAM6~U)		kd
r16_PZAP_binding_ITAM2:	 A(State~PZAP) +  Zeta(receptor!+,ITAM2~PP) <->  Zeta(receptor!+,ITAM2~PP!1).A(State~PZAP!1)		kzb, kzu
r18_PZAP_binding_ITAM4:	 A(State~PZAP) +  Zeta(receptor!+,ITAM4~PP) <->  Zeta(receptor!+,ITAM4~PP!1).A(State~PZAP!1)		kzb, kzu
r19_PZAP_binding_ITAM5:	 A(State~PZAP) +  Zeta(receptor!+,ITAM5~PP) <->  Zeta(receptor!+,ITAM5~PP!1).A(State~PZAP!1)		kzb, kzu
r20_PZAP_binding_ITAM6:	 A(State~PZAP) +  Zeta(receptor!+,ITAM6~PP) <->  Zeta(receptor!+,ITAM6~PP!1).A(State~PZAP!1)		kzb, kzu
r23_UZAP_binding_ITAM3:	 A(State~UZAP) +  Zeta(receptor!+,ITAM3~PP) <->  Zeta(receptor!+,ITAM3~PP!1).A(State~UZAP!1)		kzb, kzu
r24_UZAP_binding_ITAM4:	 A(State~UZAP) +  Zeta(receptor!+,ITAM4~PP) <->  Zeta(receptor!+,ITAM4~PP!1).A(State~UZAP!1)		kzb, kzu
r25_UZAP_binding_ITAM5:	 A(State~UZAP) +  Zeta(receptor!+,ITAM5~PP) <->  Zeta(receptor!+,ITAM5~PP!1).A(State~UZAP!1)		kzb, kzu
r26_UZAP_binding_ITAM6:	 A(State~UZAP) +  Zeta(receptor!+,ITAM6~PP) <->  Zeta(receptor!+,ITAM6~PP!1).A(State~UZAP!1)		kzb, kzu
r29_uSYK_binding_ITAM3:	 A(State~uSYK) +  Zeta(receptor!+,ITAM3~U) <->  Zeta(receptor!+,ITAM3~U!1).A(State~uSYK!1)		ksbss, ksu
r30_uSYK_binding_ITAM4:	 A(State~uSYK) +  Zeta(receptor!+,ITAM4~U) <->  Zeta(receptor!+,ITAM4~U!1).A(State~uSYK!1)		ksbss, ksu
r31_uSYK_binding_ITAM5:	 A(State~uSYK) +  Zeta(receptor!+,ITAM5~U) <->  Zeta(receptor!+,ITAM5~U!1).A(State~uSYK!1)		ksbss, ksu
r32_uSYK_binding_ITAM6:	 A(State~uSYK) +  Zeta(receptor!+,ITAM6~U) <->  Zeta(receptor!+,ITAM6~U!1).A(State~uSYK!1)		ksbss, ksu
r35_uSYK_binding_ITAM3PP:	 A(State~uSYK) +  Zeta(receptor!+,ITAM3~PP) <->  Zeta(receptor!+,ITAM3~PP!1).A(State~uSYK!1)		ksb, ksu
r36_uSYK_binding_ITAM4PP:	 A(State~uSYK) +  Zeta(receptor!+,ITAM4~PP) <->  Zeta(receptor!+,ITAM4~PP!1).A(State~uSYK!1)		ksb, ksu
r37_uSYK_binding_ITAM5PP:	 A(State~uSYK) +  Zeta(receptor!+,ITAM5~PP) <->  Zeta(receptor!+,ITAM5~PP!1).A(State~uSYK!1)		ksb, ksu
r38_uSYK_binding_ITAM6PP:	 A(State~uSYK) +  Zeta(receptor!+,ITAM6~PP) <->  Zeta(receptor!+,ITAM6~PP!1).A(State~uSYK!1)		ksb, ksu
r41_PSYK_binding_ITAM3:	 A(State~pSYK) +  Zeta(receptor!+,ITAM3~U) <->  Zeta(receptor!+,ITAM3~U!1).A(State~pSYK!1)		ksbss, ksu
r42_PSYK_binding_ITAM4:	 A(State~pSYK) +  Zeta(receptor!+,ITAM4~U) <->  Zeta(receptor!+,ITAM4~U!1).A(State~pSYK!1)		ksbss, ksu
r43_PSYK_binding_ITAM5:	 A(State~pSYK) +  Zeta(receptor!+,ITAM5~U) <->  Zeta(receptor!+,ITAM5~U!1).A(State~pSYK!1)		ksbss, ksu
r44_PSYK_binding_ITAM6:	 A(State~pSYK) +  Zeta(receptor!+,ITAM6~U) <->  Zeta(receptor!+,ITAM6~U!1).A(State~pSYK!1)		ksbss, ksu
r47_PSYK_binding_ITAM3PP:	 A(State~pSYK) +  Zeta(receptor!+,ITAM3~PP) <->  Zeta(receptor!+,ITAM3~PP!1).A(State~pSYK!1)		ksb, ksu
r48_PSYK_binding_ITAM4PP:	 A(State~pSYK) +  Zeta(receptor!+,ITAM4~PP) <->  Zeta(receptor!+,ITAM4~PP!1).A(State~pSYK!1)		ksb, ksu
r49_PSYK_binding_ITAM5PP:	 A(State~pSYK) +  Zeta(receptor!+,ITAM5~PP) <->  Zeta(receptor!+,ITAM5~PP!1).A(State~pSYK!1)		ksb, ksu
r50_PSYK_binding_ITAM6PP:	 A(State~pSYK) +  Zeta(receptor!+,ITAM6~PP) <->  Zeta(receptor!+,ITAM6~PP!1).A(State~pSYK!1)		ksb, ksu
r53_SHP_binding_ITAM3_U:	 A(State~SHP) +  Zeta(receptor!+,ITAM3~U) <->  Zeta(receptor!+,ITAM3~U!1).A(State~SHP!1)		ksbU, ksuU
r54_SHP_binding_ITAM4_U:	 A(State~SHP) +  Zeta(receptor!+,ITAM4~U) <->  Zeta(receptor!+,ITAM4~U!1).A(State~SHP!1)		ksbU, ksuU
r55_SHP_binding_ITAM5_U:	 A(State~SHP) +  Zeta(receptor!+,ITAM5~U) <->  Zeta(receptor!+,ITAM5~U!1).A(State~SHP!1)		ksbU, ksuU
r56_SHP_binding_ITAM6_U:	 A(State~SHP) +  Zeta(receptor!+,ITAM6~U) <->  Zeta(receptor!+,ITAM6~U!1).A(State~SHP!1)		ksbU, ksuU
r59_SHP_binding_ITAM3_PP:	 A(State~SHP) +  Zeta(receptor!+,ITAM3~PP) <->  Zeta(receptor!+,ITAM3~PP!1).A(State~SHP!1)		ksbPP, ksuPP
r60_SHP_binding_ITAM4_PP:	 A(State~SHP) +  Zeta(receptor!+,ITAM4~PP) <->  Zeta(receptor!+,ITAM4~PP!1).A(State~SHP!1)		ksbPP, ksuPP
r61_SHP_binding_ITAM5_PP:	 A(State~SHP) +  Zeta(receptor!+,ITAM5~PP) <->  Zeta(receptor!+,ITAM5~PP!1).A(State~SHP!1)		ksbPP, ksuPP
r62_SHP_binding_ITAM6_PP:	 A(State~SHP) +  Zeta(receptor!+,ITAM6~PP) <->  Zeta(receptor!+,ITAM6~PP!1).A(State~SHP!1)		ksbPP, ksuPP
r66_pSYK_phosphorylating_self_ITAM2:	 Zeta(receptor!+,ITAM2~U!1).A(State~pSYK!1) ->  Zeta(receptor!+,ITAM2~PP!1).A(State~pSYK!1)		ksi
r68_pSYK_phosphorylating_self_ITAM4:	 Zeta(receptor!+,ITAM4~U!1).A(State~pSYK!1) ->  Zeta(receptor!+,ITAM4~PP!1).A(State~pSYK!1)		ksi
r69_pSYK_phosphorylating_self_ITAM5:	 Zeta(receptor!+,ITAM5~U!1).A(State~pSYK!1) ->  Zeta(receptor!+,ITAM5~PP!1).A(State~pSYK!1)		ksi
r70_pSYK_phosphorylating_self_ITAM6:	 Zeta(receptor!+,ITAM6~U!1).A(State~pSYK!1) ->  Zeta(receptor!+,ITAM6~PP!1).A(State~pSYK!1)		ksi
r73_pSYK_transphosphorylating_other_ITAM3:	 A(State~pSYK!+) +  Zeta(receptor!+,ITAM3~U!?) ->  A(State~pSYK!+) +  Zeta(receptor!+,ITAM3~PP!?)		ksih
r74_pSYK_transphosphorylating_other_ITAM4:	 A(State~pSYK!+) +  Zeta(receptor!+,ITAM4~U!?) ->  A(State~pSYK!+) +  Zeta(receptor!+,ITAM4~PP!?)		ksih
r75_pSYK_transphosphorylating_other_ITAM5:	 A(State~pSYK!+) +  Zeta(receptor!+,ITAM5~U!?) ->  A(State~pSYK!+) +  Zeta(receptor!+,ITAM5~PP!?)		ksih
r76_pSYK_transphosphorylating_other_ITAM6:	 A(State~pSYK!+) +  Zeta(receptor!+,ITAM6~U!?) ->  A(State~pSYK!+) +  Zeta(receptor!+,ITAM6~PP!?)		ksih
r77_uSYK_transphosphorylating_other_ITAM1:	 A(State~uSYK!+) +  Zeta(receptor!+,ITAM1~U!?) ->  A(State~uSYK!+) +  Zeta(receptor!+,ITAM1~PP!?)		ksih
r78_uSYK_transphosphorylating_other_ITAM2:	 A(State~uSYK!+) +  Zeta(receptor!+,ITAM2~U!?) ->  A(State~uSYK!+) +  Zeta(receptor!+,ITAM2~PP!?)		ksih
r79_uSYK_transphosphorylating_other_ITAM3:	 A(State~uSYK!+) +  Zeta(receptor!+,ITAM3~U!?) ->  A(State~uSYK!+) +  Zeta(receptor!+,ITAM3~PP!?)		ksih
r80_uSYK_transphosphorylating_other_ITAM4:	 A(State~uSYK!+) +  Zeta(receptor!+,ITAM4~U!?) ->  A(State~uSYK!+) +  Zeta(receptor!+,ITAM4~PP!?)		ksih
r81_uSYK_transphosphorylating_other_ITAM5:	 A(State~uSYK!+) +  Zeta(receptor!+,ITAM5~U!?) ->  A(State~uSYK!+) +  Zeta(receptor!+,ITAM5~PP!?)		ksih
r82_uSYK_transphosphorylating_other_ITAM6:	 A(State~uSYK!+) +  Zeta(receptor!+,ITAM6~U!?) ->  A(State~uSYK!+) +  Zeta(receptor!+,ITAM6~PP!?)		ksih
r98_KP_adaptor_dephosph_pZAP_ITAM3:	 Zeta(receptor,ITAM3!1).A(State~PZAP!1) ->  Zeta(receptor,ITAM3!1).A(State~UZAP!1)		kh * 10.0
r99_KP_adaptor_dephosph_pZAP_ITAM4:	 Zeta(receptor,ITAM4!1).A(State~PZAP!1) ->  Zeta(receptor,ITAM4!1).A(State~UZAP!1)		kh * 10.0
r100_KP_adaptor_dephosph_pZAP_ITAM5:	 Zeta(receptor,ITAM5!1).A(State~PZAP!1) ->  Zeta(receptor,ITAM5!1).A(State~UZAP!1)		kh * 10.0
r101_KP_adaptor_dephosph_pZAP_ITAM6:	 Zeta(receptor,ITAM6!1).A(State~PZAP!1) ->  Zeta(receptor,ITAM6!1).A(State~UZAP!1)		kh * 10.0
r104_KP_adaptor_dephosph_pSYK_ITAM3:	 Zeta(receptor,ITAM3!1).A(State~pSYK!1) ->  Zeta(receptor,ITAM3!1).A(State~uSYK!1)		kh * 10.0
r105_KP_adaptor_dephosph_pSYK_ITAM4:	 Zeta(receptor,ITAM4!1).A(State~pSYK!1) ->  Zeta(receptor,ITAM4!1).A(State~uSYK!1)		kh * 10.0
r106_KP_adaptor_dephosph_pSYK_ITAM5:	 Zeta(receptor,ITAM5!1).A(State~pSYK!1) ->  Zeta(receptor,ITAM5!1).A(State~uSYK!1)		kh * 10.0
r107_KP_adaptor_dephosph_pSYK_ITAM6:	 Zeta(receptor,ITAM6!1).A(State~pSYK!1) ->  Zeta(receptor,ITAM6!1).A(State~uSYK!1)		kh * 10.0
r110_LRZ1_breaking_ITAM3:	 Zeta(receptor,ITAM3!1).A(State!1) ->  A(State) +  Zeta(receptor,ITAM3)		kh
r111_LRZ1_breaking_ITAM4:	 Zeta(receptor,ITAM4!1).A(State!1) ->  A(State) +  Zeta(receptor,ITAM4)		kh
r112_LRZ1_breaking_ITAM5:	 Zeta(receptor,ITAM5!1).A(State!1) ->  A(State) +  Zeta(receptor,ITAM5)		kh
r113_LRZ1_breaking_ITAM6:	 Zeta(receptor,ITAM6!1).A(State!1) ->  A(State) +  Zeta(receptor,ITAM6)		kh
r116_zeta_convert3:	 Zeta(receptor,ITAM3~PP) ->  Zeta(receptor,ITAM3~U)		kh
r117_zeta_convert4:	 Zeta(receptor,ITAM4~PP) ->  Zeta(receptor,ITAM4~U)		kh
r118_zeta_convert5:	 Zeta(receptor,ITAM5~PP) ->  Zeta(receptor,ITAM5~U)		kh
r119_zeta_convert6:	 Zeta(receptor,ITAM6~PP) ->  Zeta(receptor,ITAM6~U)		kh
end reaction rules

end model

simulate_nf({t_end=>266.0,n_steps=>2000})

